{
    "info": {
        "name": "10 X Serial Dilution", 
        "description": "", 
        "create-date": "Jan 18, 2016", 
        "version": "1.0", 
        "run-notes": ""
    }, 
    "deck": {
        "p200-rack": {
            "labware": "tiprack-200ul",
            "slot" : "B1"
        }, 
        "standards": {
            "labware": "96-PCR-flat",
            "slot" : "D1"
        }, 
        "trough": {
            "labware": "trough-12row",
            "slot" : "C2"
        }, 
        "trash": {
            "labware": "point",
            "slot" : "B2"
        }
    }, 
"head" : {
        "p200" : {
        "tool" : "pipette",
        "tip-racks" : [
            {
                "container" : "p200-rack"
            }
        ],
            "trash-container": {
                "container": "trash"
            },
            "multi-channel": true,
            "axis": "a",
            "volume": 200,
            "down-plunger-speed": 300,
            "up-plunger-speed": 500,
            "tip-plunge": 6,
            "extra-pull-volume": 0,
            "extra-pull-delay": 200,
            "distribute-percentage": 0.1,
             "points": [
                {
                    "f1": 1,
                    "f2": 1
                },
                {
                    "f1": 5,
                    "f2": 5
                },
                {
                    "f1": 7,
                    "f2": 7
                },
                {
                    "f1": 10,
                    "f2": 10
                }
            ]
            
        }
    },
    "ingredients": {}, 
    "instructions": [
        
        {
            "tool": "p200", 
            "groups": [

                {
                    "transfer": [
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        },
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A2", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        },
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A3", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        },
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A4", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        },
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A5", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        },
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A6", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        },
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A7", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        },
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A8", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        },
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A9", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        },
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A10", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        },
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A11", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        },
                        {
                            "from": {
                                "container": "trough", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A12", 
                                "touch-tip": false
                            }, 
                            "volume": 180
                        }
                    ]
                }, 
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A1", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "standards", 
                                "location": "A1", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A2", 
                                "touch-tip": true
                            }, 
                            "volume": 20
                        } 
                    ]
                },
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A2", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "standards", 
                                "location": "A2", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A3", 
                                "touch-tip": true
                            }, 
                            "volume": 20
                        } 
                    ]
                },
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A3", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "standards", 
                                "location": "A3", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A4", 
                                "touch-tip": true
                            }, 
                            "volume": 20
                        } 
                    ]
                },
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A4", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "standards", 
                                "location": "A4", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A5", 
                                "touch-tip": true
                            }, 
                            "volume": 20
                        } 
                    ]
                },
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A5", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "standards", 
                                "location": "A5", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A6", 
                                "touch-tip": true
                            }, 
                            "volume": 20
                        } 
                    ]
                },
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A6", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "standards", 
                                "location": "A6", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A7", 
                                "touch-tip": true
                            }, 
                            "volume": 20
                        } 
                    ]
                },
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A7", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "standards", 
                                "location": "A7", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A8", 
                                "touch-tip": true
                            }, 
                            "volume": 20
                        } 
                    ]
                },
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A8", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "standards", 
                                "location": "A8", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A9", 
                                "touch-tip": true
                            }, 
                            "volume": 20
                        } 
                    ]
                },
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A9", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "standards", 
                                "location": "A9", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A10", 
                                "touch-tip": true
                            }, 
                            "volume": 20
                        } 
                    ]
                },
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A10", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "standards", 
                                "location": "A10", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A11", 
                                "touch-tip": true
                            }, 
                            "volume": 20
                        } 
                    ]
                },
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A11", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "standards", 
                                "location": "A11", 
                                "touch-tip": false
                            }, 
                            "to": {
                                "container": "standards", 
                                "location": "A12", 
                                "touch-tip": true
                            }, 
                            "volume": 20
                        } 
                    ]
                },
                {
                    "mix": [
                        {
                            "container": "standards", 
                            "location": "A12", 
                            "volume": 100, 
                            "repetitions": 3, 
                            "blowout": true
                        }
                    ]
                } 
            ]
        }
    ]
}