{
	"deck": {
        "p200-rack" : {
            "labware" : "tiprack-200ul",
            "slot" : "A2"
        },
        "p10-rack" : {
            "labware" : "tiprack-10ul",
            "slot" : "B1"
        },
        "Tube Rack": {
            "labware": "tube-rack-2ml",
            "slot" : "D1"
        },
        "trash": {
            "labware": "point",
            "slot" : "B2"
        },
        "Cold Deck" : {
            "labware" : "tube-rack-2ml",
            "slot" : "D3"
        },
        "Heat Deck" : {
        	"labware" : "tube-rack-2ml",
            "slot" : "B3"
        }
    },

    "head" : {
        "p200" : {
      	"tool" : "pipette",
      	"tip-racks" : [
        	{
       		   	"container" : "p200-rack"
        	}
      	],
            "trash-container": {
                "container": "trash"
            },
            "multi-channel": false,
            "axis": "b",
            "volume": 200,
            "down-plunger-speed": 300,
            "up-plunger-speed": 500,
            "tip-plunge": 6,
            "extra-pull-volume": 0,
            "extra-pull-delay": 200,
            "distribute-percentage": 0.1,
             "points": [
                {
                    "f1": 1,
                    "f2": 1
                },
                {
                    "f1": 5,
                    "f2": 5
                },
                {
                    "f1": 7,
                    "f2": 7
                },
                {
                    "f1": 10,
                    "f2": 10
                }
            ]
            
        },
        "p10" : {
        "tool" : "pipette",
        "tip-racks" : [
            {
                "container" : "p10-rack"
            }
        ],
            "trash-container": {
                "container": "trash"
            },
            "multi-channel": false,
            "axis": "a",
            "volume": 10,
            "down-plunger-speed": 300,
            "up-plunger-speed": 500,
            "tip-plunge": 6,
            "extra-pull-volume": 0,
            "extra-pull-delay": 200,
            "distribute-percentage": 0.1,
             "points": [
                {
                    "f1": 1,
                    "f2": 1
                },
                {
                    "f1": 5,
                    "f2": 5
                },
                {
                    "f1": 7,
                    "f2": 7
                },
                {
                    "f1": 10,
                    "f2": 10
                }
            ]
            
        }
    },

    "ingredients" : {

    },

    "instructions": [
        {
            "tool": "p10",
            "groups": [
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "Cold Deck",
                                "location": "B1",
                                "tip-offset" : 0
                            },
                            "to": {
                                "container": "Cold Deck",
                                "location": "A1",
                                "touch-tip": true,
                                "tip-offset" : 0,
                                "delay": 1800
                            },
                            "volume": 2,
                            "blowout" : true
                        }
                    ]
                }
            ]
        },
        {
            "tool": "p200",
            "groups": [
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "Cold Deck",
                                "location": "A1",
                                "tip-offset" : 0
                            },
                            "to": {
                                "container": "Heat Deck",
                                "location": "A1",
                                "touch-tip": true,
                                "tip-offset" : 0,
                                "delay": 35
                            },
                            "volume": 27,
                            "blowout" : true
                        },
                        {
                            "from": {
                                "container": "Heat Deck",
                                "location": "A1",
                                "tip-offset" : 0
                            },
                            "to": {
                                "container": "Cold Deck",
                                "location": "A1",
                                "touch-tip": true,
                                "tip-offset" : 0,
                                "delay": 300
                            },
                            "volume": 27,
                            "blowout" : true
                        }
                    ]
                },
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "Tube Rack",
                                "location": "A1",
                                "tip-offset" : 0
                            },
                            "to": {
                                "container": "Cold Deck",
                                "location": "A1",
                                "tip-offset" : 0,
                                "touch-tip": true
                            },
                            "volume": 200,
                            "blowout" : true
                        }
                    ]
                }
            ]
        }
    ]
}