{
  "deck": {
    "p1000-rack": {"labware": "tiprack-1000ul", "slot": "A1"},
    "p1000-rack-2": {"labware": "tiprack-1000ul", "slot": "A2"},
    "p200-rack": {"labware": "tiprack-200ul", "slot": "B1"},
    "p200-rack2": {"labware": "tiprack-200ul", "slot": "A3"},
    "trash": {"labware": "trough-12row", "slot": "B2"},
    "Tube Rack": {"labware": "tube-rack-2ml", "slot": "C1"},
    "Plate 1": {"labware": "96-PCR-flat", "slot": "C2"},
    "Trough": {"labware": "trough-12row", "slot": "C3"},
    "Plate 2": {"labware": "96-PCR-flat", "slot": "D1"},
    "Plate 3": {"labware": "96-PCR-flat", "slot": "D2"},
    "Plate 4": {"labware": "96-PCR-flat", "slot": "D3"},
    "Plate 5": {"labware": "96-PCR-flat", "slot": "E1"},
    "Plate 6": {"labware": "96-PCR-flat", "slot": "E2"},
    "Plate 7": {"labware": "96-PCR-flat", "slot": "E3"}
  },
  "head": {
    "p200": {
      "tool": "pipette",
      "tip-racks": [{"container": "p200-rack"}, {"container": "p200-rack2"}],
      "trash-container": {"container": "trash"},
      "multi-channel": true,
      "axis": "a",
      "volume": 200,
      "down-plunger-speed": 300,
      "up-plunger-speed": 500,
      "tip-plunge": 6,
      "extra-pull-volume": 0,
      "extra-pull-delay": 200,
      "distribute-percentage": 0.1,
      "points": [{"f1": 1, "f2": 1}, {"f1": 5, "f2": 5}, {"f1": 7, "f2": 7}, {"f1": 10, "f2": 10}]
    },
    "p1000": {
      "tool": "pipette",
      "tip-racks": [{"container": "p1000-rack"}, {"container": "p1000-rack-2"}],
      "trash-container": {"container": "trash"},
      "multi-channel": false,
      "axis": "b",
      "volume": 1000,
      "down-plunger-speed": 300,
      "up-plunger-speed": 500,
      "tip-plunge": 6,
      "extra-pull-volume": 0,
      "extra-pull-delay": 200,
      "distribute-percentage": 0.1,
      "points": [{"f1": 1, "f2": 1}, {"f1": 5, "f2": 5}, {"f1": 7, "f2": 7}, {"f1": 10, "f2": 10}]
    }
  },
  "ingredients": {},
  "instructions": [
    {
      "tool": "p1000",
      "groups": [
        {
          "transfer": [
            {
              "from": {"container": "Tube Rack", "location": "A1", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "A1", "tip-offset": 0, "touch-tip": false},
              "volume": 600
            },
            {
              "from": {"container": "Tube Rack", "location": "A1", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "A2", "tip-offset": 0, "touch-tip": false},
              "volume": 600
            }
          ]
        },
        {
          "transfer": [
            {
              "from": {"container": "Tube Rack", "location": "B1", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "A3", "tip-offset": 0, "touch-tip": false},
              "volume": 600
            },
            {
              "from": {"container": "Tube Rack", "location": "B1", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "A4", "tip-offset": 0, "touch-tip": false},
              "volume": 600
            }
          ]
        },
        {
          "transfer": [
            {
              "from": {"container": "Tube Rack", "location": "C1", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "A5", "tip-offset": 0, "touch-tip": false},
              "volume": 600
            },
            {
              "from": {"container": "Tube Rack", "location": "C1", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "A6", "tip-offset": 0, "touch-tip": false},
              "volume": 600
            }
          ]
        },
        {
          "transfer": [
            {
              "from": {"container": "Tube Rack", "location": "D1", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "A7", "tip-offset": 0, "touch-tip": false},
              "volume": 600
            },
            {
              "from": {"container": "Tube Rack", "location": "D1", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "A8", "tip-offset": 0, "touch-tip": false},
              "volume": 600
            }
          ]
        },
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        {
          "transfer": [
            {
              "from": {"container": "Tube Rack", "location": "D3", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "E11", "tip-offset": 0, "touch-tip": false},
              "volume": 600
            },
            {
              "from": {"container": "Tube Rack", "location": "D3", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "E12", "tip-offset": 0, "touch-tip": false},
              "volume": 600
            }
          ]
        },
        {
          "distribute": {
            "from": {"container": "Trough", "location": "A1"},
            "to": [
              {"container": "Plate 1", "location": "B1", "volume": 300, "touch-tip": false},
              {"container": "Plate 1", "location": "C1", "volume": 300, "touch-tip": false},
              {"container": "Plate 1", "location": "D1", "volume": 300, "touch-tip": false}
            ],
            "blowout": false
          }
        },
        {
          "distribute": {
            "from": {"container": "Trough", "location": "A1"},
            "to": [
              {"container": "Plate 1", "location": "B2", "volume": 300, "touch-tip": false},
              {"container": "Plate 1", "location": "C2", "volume": 300, "touch-tip": false},
              {"container": "Plate 1", "location": "D2", "volume": 300, "touch-tip": false}
            ],
            "blowout": false
          }
        },
        {
          "distribute": {
            "from": {"container": "Trough", "location": "A1"},
            "to": [
              {"container": "Plate 1", "location": "B3", "volume": 300, "touch-tip": false},
              {"container": "Plate 1", "location": "C3", "volume": 300, "touch-tip": false},
              {"container": "Plate 1", "location": "D3", "volume": 300, "touch-tip": false}
            ],
            "blowout": false
          }
        },
        {
          "distribute": {
            "from": {"container": "Trough", "location": "A1"},
            "to": [
              {"container": "Plate 1", "location": "B4", "volume": 300, "touch-tip": false},
              {"container": "Plate 1", "location": "C4", "volume": 300, "touch-tip": false},
              {"container": "Plate 1", "location": "D4", "volume": 300, "touch-tip": false}
            ],
            "blowout": false
          }
        },
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        {
          "distribute": {
            "from": {"container": "Trough", "location": "A1"},
            "to": [
              {"container": "Plate 1", "location": "F12", "volume": 300, "touch-tip": false},
              {"container": "Plate 1", "location": "G12", "volume": 300, "touch-tip": false},
              {"container": "Plate 1", "location": "H12", "volume": 300, "touch-tip": false}
            ],
            "blowout": false
          }
        },
        {
          "transfer": [
            {
              "from": {"container": "Plate 1", "location": "A1", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "B1", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "B1", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "C1", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "C1", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "D1", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "D1", "touch-tip": false},
              "to": {"container": "trash", "location": "A1", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            }
          ]
        },
        {
          "transfer": [
            {
              "from": {"container": "Plate 1", "location": "A2", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "B2", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "B2", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "C2", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "C2", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "D2", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "D2", "touch-tip": false},
              "to": {"container": "trash", "location": "A1", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            }
          ]
        },
        {
          "transfer": [
            {
              "from": {"container": "Plate 1", "location": "A3", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "B3", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "B3", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "C3", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "C3", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "D3", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "D3", "touch-tip": false},
              "to": {"container": "trash", "location": "A1", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            }
          ]
        },
        {
          "transfer": [
            {
              "from": {"container": "Plate 1", "location": "A4", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "B4", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "B4", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "C4", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "C4", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "D4", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "D4", "touch-tip": false},
              "to": {"container": "trash", "location": "A1", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            }
          ]
        },
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        {
          "transfer": [
            {
              "from": {"container": "Plate 1", "location": "E12", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "F12", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "F12", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "G12", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "G12", "touch-tip": false},
              "to": {"container": "Plate 1", "location": "H12", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            },
            {
              "from": {"container": "Plate 1", "location": "H12", "touch-tip": false},
              "to": {"container": "trash", "location": "A1", "tip-offset": 0, "touch-tip": false},
              "volume": 300
            }
          ]
        }
      ]
    }
  ]
}
