{
	"info": {
		"name" : "8 Sample PCR",
		"description" : "8 PCRs from the same DNA sample",
		"create-date" : "August 20th, 2015",
		"version" : "1.0",
		"run-notes" : "Master Mix (tube rack A1), DNA (tube rack B1), Taq (tube rack C1), PCR samples (plate A1-H1)"
	},

	"deck": {
        "p10-rack" : {
            "labware" : "tiprack-10ul",
            "slot" : "C2"
        },
        "p200-rack" : {
        	"labware" : "tiprack-200ul",
        	"slot" : "A1"
        },
        "plate" : {
            "labware" : "96-PCR-flat",
            "slot" : "C1"
        },
        "tube rack" : {
            "labware": "tube-rack-2ml",
            "slot" :  "E1"
        },
        "trash" : {
        	"labware" : "point",
        	"slot" : "B2"
		}
	},

	"head" : {
        "p200": {
            "tool": "pipette", 
            "tip-racks": [
                {
                    "container": "p200-rack"
                }
            ], 
            "trash-container": {
                "container": "trash"
            }, 
            "multi-channel": false, 
            "axis": "b", 
            "volume": 200, 
            "down-plunger-speed": 300, 
            "up-plunger-speed": 500, 
            "tip-plunge": 6, 
            "extra-pull-volume": 0, 
            "extra-pull-delay": 200, 
            "distribute-percentage": 0.1, 
            "points": [
                {
                    "f1": 1, 
                    "f2": 1
                }, 
                {
                    "f1": 5, 
                    "f2": 5
                }, 
                {
                    "f1": 7, 
                    "f2": 7
                }, 
                {
                    "f1": 10, 
                    "f2": 10
                }
            ]
        },
        
		"p10" : {
			"tool" : "pipette",
			"tip-racks" : [
				{
					"container" : "p10-rack"
				}
			],

			"trash-container" : {
				"container" : "trash"
			},
			"multi-channel" : false,
			"axis" : "a",
			"volume" : 10,
			"down-plunger-speed" : 300,
			"up-plunger-speed" : 500,
			"tip-plunge" : 7,
			"extra-pull-volume" : 0,
			"extra-pull-delay" : 200,
			"distribute-percentage" : 0.1,
			"points" : [
				{
					"f1" : 1,
					"f2" : 1
				},
				{
					"f1" : 5,
					"f2" : 5
				},
				{
					"f1" : 7,
					"f2" : 7
				},
				{
					"f1" : 10,
					"f2" : 10
				}
			]
		}
	},

	"ingredients" : {
	},
	
	"instructions" : [
		{
			"tool" : "p200",
			"groups": [
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "A1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "A1",
								"touch-tip" : false
							},
							"volume" : 23,
							"blowout" : true
						},
						{
							"from" : {
								"container" : "tube rack",
								"location": "A1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "B1",
								"touch-tip" : false
							},
							"volume" : 23,
							"blowout" : true
						},
						{
							"from" : {
								"container" : "tube rack",
								"location": "A1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "C1",
								"touch-tip" : false
							},
							"volume" : 23,
							"blowout" : true
						},
						{
							"from" : {
								"container" : "tube rack",
								"location": "A1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "D1",
								"touch-tip" : false
							},
							"volume" : 23,
							"blowout" : true
						},
						{
							"from" : {
								"container" : "tube rack",
								"location": "A1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "E1",
								"touch-tip" : false
							},
							"volume" : 23,
							"blowout" : true
						},
						{
							"from" : {
								"container" : "tube rack",
								"location": "A1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "F1",
								"touch-tip" : false
							},
							"volume" : 23,
							"blowout" : true
						},
						{
							"from" : {
								"container" : "tube rack",
								"location": "A1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "G1",
								"touch-tip" : false
							},
							"volume" : 23,
							"blowout" : true
						},
						{
							"from" : {
								"container" : "tube rack",
								"location": "A1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "H1",
								"touch-tip" : false
							},
							"volume" : 23,
							"blowout" : true
						}

					]
				}
			]
		},
        {
            "tool" : "p10",
            "groups" : [
                {
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "B1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "A1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "B1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "B1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "B1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "C1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "B1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "D1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "B1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "E1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "B1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "F1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "B1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "G1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "B1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "H1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "C1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "A1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "C1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "B1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "C1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "C1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "C1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "D1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "C1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "E1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "C1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "F1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "C1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "G1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				},
				{
					"transfer" : [
						{
							"from" : {
								"container" : "tube rack",
								"location": "C1",
								"tip-offset" : 0,
								"delay" : 0
							},
							"to" : {
								"container" : "plate",
								"location" : "H1",
								"touch-tip" : false
							},
							"volume" : 1,
							"blowout" : true
						}
					]
				}
			]
		}
	]
}